PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2024.2.4
  Window size (pixels) = [1920, 1200]
  expName = Semantic Priming
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 0
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Routines
  Routine intro_1
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    TextComponent intro_1_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Bitte lesen Sie die nachfolgende Anleitung aufmerksam durch!

        Ihnen wird eine Zeichenkette präsentiert. Daraufhin werden Sie gefragt, ob es sich bei dieser Zeichenkette um ein Wort des Deutschen handelt oder nicht.

        (Weiter mit [f] oder [j].)
    KeyboardComponent intro_1_key
      allowedKeys = 'f', 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro_2
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    TextComponent intro_2_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Legen Sie Ihre Hände auf die Tastatur und drücken Sie die Taste [j], falls es sich um ein Wort handelt; andernfalls drücken Sie [f].

        (Weiter mit [f] oder [j].)
    KeyboardComponent intro_2_key
      allowedKeys = 'f', 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro_3
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    TextComponent intro_3_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Sie sehen jede Zeichenketten nur sehr kurz, daher ist es wichtig, dass Sie sich konzentrieren und Ihre Hände auf der Tastatur liegen lassen.

        (Weiter mit [f] oder [j].)
    KeyboardComponent intro_3_key
      allowedKeys = 'f', 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro_4
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    TextComponent intro_4_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Es folgt nun eine kleine Proberunde, damit Sie sich mit dem Ablauf vertraut machen können.

        (Weiter mit [f] oder [j].)
    KeyboardComponent intro_4_key
      allowedKeys = 'f', 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prime
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    TextComponent prime_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.15
      text = Test
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  Routine blank
    RoutineSettingsComponent blank
      stopVal [duration (s)] = 0.85
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  Routine target
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    TextComponent target_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = Prüfung
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  Routine decision
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    TextComponent decision_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.3
      text = ########
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    KeyboardComponent decision_key
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.3
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  Routine fixation
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    TextComponent fixation_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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  Routine bridge
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    TextComponent bridge_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Das ist das Ende der Proberunde. Jetzt beginnt das Experiment.

        (Weiter mit [f] oder [j].)
    KeyboardComponent bridge_key
      allowedKeys = 'f', 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Das ist das Ende des Experiments. Vielen Dank für Ihre Teilnahme!

        (Weiter mit [f] oder [j].)
    KeyboardComponent end_key
      allowedKeys = 'f', 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine intro_1
  Routine intro_2
  Routine intro_3
  Routine intro_4
  LoopInitiator proberunde loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine fixation
    Routine prime
    Routine blank
    Routine target
    Routine decision
  LoopTerminator proberunde
  Routine bridge
  LoopInitiator experiment loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine fixation
    Routine prime
    Routine blank
    Routine target
    Routine decision
  LoopTerminator experiment
  Routine end
