PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2024.2.4
  Window size (pixels) = [1920, 1200]
  expName = Semantic Priming
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 0
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Routines
  Routine intro_1
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    TextComponent intro_1_text
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $f'{intro_1_fragment}({continue_footer})'
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    KeyboardComponent intro_1_key
      allowedKeys = 'f', 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro_2
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    TextComponent intro_2_text
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $f'{intro_2_fragment}({continue_footer})'
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    KeyboardComponent intro_2_key
      allowedKeys = 'f', 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro_3
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    TextComponent intro_3_text
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $f'{intro_3_fragment}({continue_footer})'
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    KeyboardComponent intro_3_key
      allowedKeys = 'f', 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine intro_4
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  Routine prime
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    TextComponent prime_text
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.15
      text [set every repeat] = $Prime
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  Routine blank
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    TextComponent blank_text
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $SOA_in_s
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  Routine target
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    TextComponent target_text
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text [set every repeat] = $Target
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  Routine decision
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    TextComponent decision_text
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.3
      text = ########
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    KeyboardComponent decision_key
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.3
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  Routine fixation
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    TextComponent fixation_text
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = +
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  Routine bridge
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    TextComponent bridge_text
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $f'{bridge_fragment}({continue_footer})'
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    KeyboardComponent bridge_key
      allowedKeys = 'f', 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent end_text
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $f'{end_fragment}({continue_footer})'
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    KeyboardComponent end_key
      allowedKeys = 'f', 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator text loopType="TrialHandler"
    conditions = [{'continue_footer': 'Weiter mit [f] oder [j].', 'intro_1_fragment': 'Bitte lesen Sie die nachfolgende Anleitung aufmerksam durch!\n\nIhnen werden nacheinander zwei Zeichenketten präsentiert. Sie sollen daraufhin entscheiden, ob es sich bei der zweiten Zeichenkette um ein Wort des Deutschen handelt oder nicht.\n\n', 'intro_2_fragment': 'Legen Sie Ihre Hände auf die Tastatur und drücken Sie die Taste [j], falls es sich um ein Wort handelt; andernfalls drücken Sie [f].\n\n', 'intro_3_fragment': 'Sie sehen jede Zeichenketten nur sehr kurz und müssen daraufhin schnell eine Entscheidung treffen, da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
    conditionsFile = texts.xlsx
    loopType = sequential
    nReps = 1
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    Routine intro_1
    Routine intro_2
    Routine intro_3
    Routine intro_4
    LoopInitiator proberunde loopType="TrialHandler"
      conditionsFile = /Users/tobias/ba-sem-prime/conditions.xlsx
      loopType = random
      nReps = 5
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      conditions:
        [{'Condition': 'Associative+Semantic', 'SOA_in_s': 0.2, 'SOA_in_ms': 200, 'Prime': 'Wrack ', 'Target': 'Taucher ', 'Associative_Strength': 2.97, 'Common_Associates': 31, 'Prime_Letters': 5, 'Prime_FreqClass': 12, 'Prime_OrthogrN': 2, 'Target_Letters': 7, 'Target_FreqClass': 13, 'Target_OrthogrN': 2},
        {'Condition': 'Associative+Semantic', 'SOA_in_s': 0.2, 'SOA_in_ms': 200, 'Prime': 'Heizung ', 'Target': 'Lüftung ', 'Associative_Strength': 3.25, 'Common_Associates': 35, 'Prime_Letters': 7, 'Prime_FreqClass': 12, 'Prime_OrthogrN': 2, 'Target_Letters': 7, 'Target_FreqClass': 15, 'Target_OrthogrN': 0},
        {'Condition': 'Associative+Semantic', 'SOA_in_s': 0.2, 'SOA_in_ms': 200, 'Prime': 'Morgen ', 'Target': 'Abend ', 'Associative_Strength': 3.4, 'Common_Associates': 37, 'Prime_Letters': 6, 'Prime_FreqClass': 9, 'Prime_OrthogrN': 4, 'Target_Letters': 5, 'Target_FreqClass': 8, 'Target_OrthogrN': 0},
        {'Condition': 'Associative+Semantic', 'SOA_in_s': 0.2, 'SOA_in_ms': 200, 'Prime': 'Konzert ', 'Target': 'Chor ', 'Associative_Strength': 2.92, 'Common_Associates': 24, 'Prime_Letters': 7, 'Prime_FreqClass': 9, 'Prime_OrthogrN': 2, 'Target_Letters': 4, 'Target_FreqClass': 11, 'Target_OrthogrN': 0},
        {'Condition': 'Associative+Semantic', 'SOA_in_s': 0.2, 'SOA_in_ms': 200, 'Prime': 'Wut ', 'Target': 'Trauer', 'Associative_Strength': 3.66, 'Common_Associates': 31, 'Prime_Letters': 3, 'Prime_FreqClass': 10, 'Prime_OrthogrN': 3, 'Target_Letters': 6, 'Target_FreqClass': 11, 'Target_OrthogrN': 2}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
      Routine fixation
      Routine prime
      Routine blank
      Routine target
      Routine decision
    LoopTerminator proberunde
    Routine bridge
    LoopInitiator experiment loopType="TrialHandler"
      conditionsFile = /Users/tobias/ba-sem-prime/conditions.xlsx
      loopType = random
      nReps = 25
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      conditions:
        [{'Condition': 'Associative+Semantic', 'SOA_in_s': 0.2, 'SOA_in_ms': 200, 'Prime': 'Wrack ', 'Target': 'Taucher ', 'Associative_Strength': 2.97, 'Common_Associates': 31, 'Prime_Letters': 5, 'Prime_FreqClass': 12, 'Prime_OrthogrN': 2, 'Target_Letters': 7, 'Target_FreqClass': 13, 'Target_OrthogrN': 2},
        {'Condition': 'Associative+Semantic', 'SOA_in_s': 0.2, 'SOA_in_ms': 200, 'Prime': 'Heizung ', 'Target': 'Lüftung ', 'Associative_Strength': 3.25, 'Common_Associates': 35, 'Prime_Letters': 7, 'Prime_FreqClass': 12, 'Prime_OrthogrN': 2, 'Target_Letters': 7, 'Target_FreqClass': 15, 'Target_OrthogrN': 0},
        {'Condition': 'Associative+Semantic', 'SOA_in_s': 0.2, 'SOA_in_ms': 200, 'Prime': 'Morgen ', 'Target': 'Abend ', 'Associative_Strength': 3.4, 'Common_Associates': 37, 'Prime_Letters': 6, 'Prime_FreqClass': 9, 'Prime_OrthogrN': 4, 'Target_Letters': 5, 'Target_FreqClass': 8, 'Target_OrthogrN': 0},
        {'Condition': 'Associative+Semantic', 'SOA_in_s': 0.2, 'SOA_in_ms': 200, 'Prime': 'Konzert ', 'Target': 'Chor ', 'Associative_Strength': 2.92, 'Common_Associates': 24, 'Prime_Letters': 7, 'Prime_FreqClass': 9, 'Prime_OrthogrN': 2, 'Target_Letters': 4, 'Target_FreqClass': 11, 'Target_OrthogrN': 0},
        {'Condition': 'Associative+Semantic', 'SOA_in_s': 0.2, 'SOA_in_ms': 200, 'Prime': 'Wut ', 'Target': 'Trauer', 'Associative_Strength': 3.66, 'Common_Associates': 31, 'Prime_Letters': 3, 'Prime_FreqClass': 10, 'Prime_OrthogrN': 3, 'Target_Letters': 6, 'Target_FreqClass': 11, 'Target_OrthogrN': 2}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
      Routine fixation
      Routine prime
      Routine blank
      Routine target
      Routine decision
    LoopTerminator experiment
    Routine end
  LoopTerminator text
